CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:28
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', 'âx80x94', 'Use regular expressions to match and name metadata in the file and path names. ']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:or (extension does istif)
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'âx80x94', 'Load the images by matching files in all folders against the text pattern âx80x98GFPHistoneâx80x99.']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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:phase
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', 'âx80x94', 'Group the analysis by the âx80x98Runâx80x99 metadata so that each folder is analyzed separately. ']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:C

ColorToGray:[module_num:5|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enabled:False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
    Select the input image:phase
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:0
    Relative weight of the blue channel:0
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
Threshold:[module_num:6|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enabled:False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
    Select the input image:OrigGray
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.2
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
ImageMath:[module_num:7|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enabled:False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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:threshold_invert
    Image or measurement?:Image
    Select the first image:Threshold
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:phase
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):20,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:0
    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.0001
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
MeasureObjectSizeShape:[module_num:9|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notes:['Measures the shape parameters of the cells after segmentation by Cellpose']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
    Select object sets to measure:IdentifyPrimaryObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:10|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notes:['Measure the intensity of the cells against the phase image. ', '', 'In the future, it may be preferable to image with Brilliant Blue stain to perform this pipeline with fluorescence.']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enabled:False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
    Select images to measure:phase
    Select objects to measure:RunCellpose

FilterObjects:[module_num:11|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
    Select the objects to filter:IdentifyPrimaryObjects
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:250
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:12|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
    Select object sets to measure:FilterObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

TrackObjects:[module_num:13|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notes:['Tracks the cells across images using the Linear Assignment Problem (LAP) method. A second phase is used to determine splitting events: when one cell becomes two....or division.']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
    Choose a tracking method:LAP
    Select the objects to track:FilterObjects
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    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:cells_tracked
    Select the movement model:Both
    Number of standard deviations for search radius:3.0
    Search radius limit, in pixel units (Min,Max):30,50
    Run the second phase of the LAP algorithm?:Yes
    Gap closing cost:40
    Split alternative cost:1000
    Merge alternative cost:40
    Maximum gap displacement, in pixel units:50
    Maximum split score:500
    Maximum merge score:50
    Maximum temporal gap, in frames:2
    Filter objects by lifetime?:No
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    Mitosis alternative cost:80
    Maximum mitosis distance, in pixel units:40
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
OverlayOutlines:[module_num:14|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notes:['Overlay the outlines of what Cellpose segmented on to the original phase contrast image. This allows for easy viewing of segmentation quality.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:phase
    Name the output image:segmentation
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FF0080
    Select objects to display:FilterObjects

EnhanceOrSuppressFeatures:[module_num:15|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notes:['Use filtering to enhance the foci speckles in the image. The feature size setting should be at least as large as the feature to be enhanced.', '', "This method uses a 'mexican hat filter'....confirm with Olivia"]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enabled:False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
    Select the input image:gfp
    Name the output image:foci_enhanced
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
MaskImage:[module_num:16|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notes:['Mask the foci using the cell objects. Basically we only care about the "foci" signal that is inside of a cell.']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enabled:False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
    Select the input image:foci_enhanced
    Name the output image:foci_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:RunCellpose
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:17|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notes:['Identify the foci using per-object thresholding to compute a threshold for each individual nuclei object. Some manual adjustment of the smoothing filter size and maxima supression distance required to optimize image segmentation.']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enabled:False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
    Select the input image:foci_masked
    Name the primary objects to be identified:foci
    Typical diameter of objects, in pixel units (Min,Max):2,9
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:4
    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MeasureObjectSizeShape:[module_num:18|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notes:['Measures shape parameters of the foci.']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enabled:False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
    Select object sets to measure:foci
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:19|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notes:['Measure the intensity of the foci against the gfp image.']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enabled:False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
    Select images to measure:gfp
    Select objects to measure:foci

RelateObjects:[module_num:20|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notes:['Establish a parent-child relationship between the foci and the cells in order to determine which foci belong to which cells. Then, calculate the mean foci measurements for each cell.']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enabled:False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
    Parent objects:RunCellpose
    Child objects:foci
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:foci_in_cells
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
TrackObjects:[module_num:21|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notes:['Track the foci in cells.']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enabled:False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
    Choose a tracking method:Distance
    Select the objects to track:foci_in_cells
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    Maximum pixel distance to consider matches:50
    Select display option:Color Only
    Save color-coded image?:Yes
    Name the output image:foci_in_cells_tracked
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    Filter objects by lifetime?:No
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
OverlayOutlines:[module_num:22|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notes:['Overlay outlines of segmented foci in cells.']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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:gfp
    Name the output image:foci_in_cells_outline
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#50FA8B
    Select objects to display:foci_in_cells

OverlayObjects:[module_num:23|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notes:['Overlay the outlined cells and the outlined foci.']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enabled:False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
    Input:cells_tracked
    Name the output image:foci_in_cells_overlayed
    Objects:foci_in_cells
    Opacity:0.3

Tile:[module_num:24|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notes:['Tile the original color image, the outlined image and the image of tracked labels together.']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enabled:False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
    Select an input image:phase
    Name the output image:tile_overlay
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:foci_in_cells_overlayed

SaveImages:[module_num:25|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notes:['']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
    Select the type of image to save:Movie/Stack
    Select the image to save:segmentation
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:overlay
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\Halofilin Shape Transitions Analysis\\KO Shape Transitions\\H26\\H26DisktoRodFullField\\131Frames\\20Frames
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    How to save the series:T (Time)
    Save with lossless compression?:No

SaveImages:[module_num:26|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
    Select the type of image to save:Movie/Stack
    Select the image to save:cells_tracked
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:tracking
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\Halofilin Shape Transitions Analysis\\KO Shape Transitions\\H26\\H26DisktoRodFullField\\131Frames\\20Frames
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    How to save the series:T (Time)
    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:27|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the embryo objects will be saved to separate .csv files, in addition to the per-image .csv.']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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\Halofilin Shape Transitions Analysis\\KO Shape Transitions\\H26\\H26DisktoRodFullField
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Frame_phase,Image|ModuleError_25SaveImages,Image|ModuleError_14OverlayOutlines,Image|ModuleError_03NamesAndTypes,Image|ModuleError_13TrackObjects,Image|ModuleError_08IdentifyPrimaryObjects,Image|ModuleError_09MeasureObjectSizeShape,Image|ModuleError_02Metadata,Image|ModuleError_12MeasureObjectSizeShape,Image|ModuleError_01Images,Image|ModuleError_04Groups,Image|ModuleError_11FilterObjects,Image|Metadata_SizeZ,Image|Metadata_Well,Image|Metadata_FileLocation,Image|Metadata_C,Image|Metadata_Plate,Image|Metadata_Z,Image|Metadata_ColorFormat,Image|Metadata_Frame,Image|Metadata_Site,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
ExportToDatabase:[module_num:28|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:halA_1
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:halA_1.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:halA_1
    Which objects should be used for locations?:FilterObjects
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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